<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
    xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
    xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
    xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
    xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
    SequenceId="urn:oid:IBP-CVP-PAP-1"
>
    <msg:Mdib SequenceId="urn:oid:IBP-CVP-PAP-1">
        <pm:MdDescription>
            <pm:Mds Handle="mds0" SafetyClassification="MedA">
                <pm:Type Code="70005">
                    <pm:ConceptDescription Lang="en-US">Invasive Pressure Monitor</pm:ConceptDescription>
                </pm:Type>

                <pm:SystemContext Handle="SC.mds0">
                    <pm:PatientContext Handle="PC.mds0" />
                    <pm:LocationContext Handle="LC.mds0" />
                </pm:SystemContext>

                <pm:Vmd Handle="vmd0" SafetyClassification="MedA">
                    <pm:Type Code="130539">
                        <pm:ConceptDescription Lang="en-US">Hemodynamic Pressure Module</pm:ConceptDescription>
                    </pm:Type>

                    <pm:Channel Handle="ch0.vmd0" SafetyClassification="MedA">
                        <pm:Type Code="130639">
                            <pm:ConceptDescription Lang="en-US">Invasive Pressures</pm:ConceptDescription>
                        </pm:Type>

                        <pm:Metric Handle="metric.ibp.mean"
                            xsi:type="pm:NumericMetricDescriptor"
                            SafetyClassification="MedA" MetricCategory="Msrmt"
                            MetricAvailability="Cont" Resolution="1">
                            <pm:Type Code="150047">
                                <pm:ConceptDescription Lang="en-US">MDC_PRESS_BLD_ART_MEAN</pm:ConceptDescription>
                            </pm:Type>
                            <pm:Unit Code="266016">
                                <pm:ConceptDescription Lang="en-US">mmHg</pm:ConceptDescription>
                            </pm:Unit>
                            <pm:TechnicalRange Upper="250" Lower="0" StepWidth="1" />
                        </pm:Metric>

                        <pm:Metric Handle="metric.cvp"
                            xsi:type="pm:NumericMetricDescriptor"
                            SafetyClassification="MedA" MetricCategory="Msrmt"
                            MetricAvailability="Cont" Resolution="1">
                            <pm:Type Code="150093">
                                <pm:ConceptDescription Lang="en-US">MDC_PRESS_CVP</pm:ConceptDescription>
                            </pm:Type>
                            <pm:Unit Code="266016">
                                <pm:ConceptDescription Lang="en-US">mmHg</pm:ConceptDescription>
                            </pm:Unit>
                            <pm:TechnicalRange Upper="50" Lower="-10" StepWidth="1" />
                        </pm:Metric>

                        <!-- PAP (Mean) -->
                        <pm:Metric Handle="metric.pap.mean"
                            xsi:type="pm:NumericMetricDescriptor"
                            SafetyClassification="MedA" MetricCategory="Msrmt"
                            MetricAvailability="Cont" Resolution="1">
                            <pm:Type Code="150103">
                                <pm:ConceptDescription Lang="en-US">MDC_PRESS_BLD_PULM_ART_MEAN</pm:ConceptDescription>
                            </pm:Type>
                            <pm:Unit Code="266016">
                                <pm:ConceptDescription Lang="en-US">mmHg</pm:ConceptDescription>
                            </pm:Unit>
                            <pm:TechnicalRange Upper="100" Lower="0" StepWidth="1" />
                        </pm:Metric>

                    </pm:Channel>
                </pm:Vmd>
            </pm:Mds>

        </pm:MdDescription>
    </msg:Mdib>
</msg:GetMdibResponse>